PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[1,1,1]
  expName = smdt_pitch
  logging level = debug
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Routines
  Routine trial
    PolygonComponent pitch_rect_higher
      fillColor = $(0, 0, 0)
      pos = (0, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    PolygonComponent pitch_rect_lower
      fillColor = $(0, 0, 0)
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    TextComponent text_trial_instruction
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 9999
      wrapWidth = 30
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      text:
        Klicka på den övre knappen om du tror att den sista tonen var högre än den första.

        Klicka på den nedre knappen om du tror att den sista tonen var lägre än den första.
    TextComponent text_trial_higher
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      text = Högre
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    TextComponent text_trial_lower
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      text = Lägre
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    CodeComponent code_trial
      Code Type = Py
      Before Experiment:
        from random import choices

        # SMDT original article:
        # "Difficulty increased progressively by making the pitch difference
        # between the notes smaller in eight steps, in the following
        # order: 17, 12, and 8 Hz difference (three items of each); 5, 4, 3,
        # and 2 Hz difference (four items of each); 1 Hz difference (two items)."
        # form list which defines the tone difference for each trial
        diff_ls = (
            [17] * 3 +
            [12] * 3 +
            [8] * 3 +
            [5] * 4 +
            [4] * 4 +
            [3] * 4 +
            [2] * 4 +
            [1] * 2
        )
        num_trials = len(diff_ls)

        # randomly generate a list which specifies for each trial if the second
        # tone should be higher or lower than the first one. True means that the
        # second tone is higher, False that the second tone is lower
        second_higher_ls = choices([True, False], k=num_trials)

        # initialize trial counter
        trial_counter = 0

        # define sound play duration (set to slightly longer than the actual
        # sound file duration, 2.13s, to ensure that sounds are played
        # in their entirety)
        PLAY_DURATION = 2.5

        # define base frequency (500Hz according to SMDT article)
        BASE_FREQUENCY = 500

        # define stimuli directory name
        STIM_DIR = 'stimuli'
        # define stimuli file name base
        STIM_FBASE = 'smdtpitch_'
        # (code assumes that frequency values in file names are separated by
        # an underscore)

        # define response box colors
        HIGHER_COLOR = [0.7,-0.5,-0.5]
        LOWER_COLOR = [0.5,-0.7,0.5]
        NEUTRAL_COLOR = [0, 0, 0]
      Begin Routine:
        # get higher frequency for this trial
        diff = diff_ls[trial_counter]
        higher_frequency = BASE_FREQUENCY + diff

        # store trial start time for saving during "End Routine"
        trial_start_time = tThisFlipGlobal + 0

        # set trial sound file path and specify correct response
        second_higher = second_higher_ls[trial_counter]
        if second_higher:
            first_freq, second_freq = BASE_FREQUENCY, higher_frequency
            correct_rect_name = pitch_rect_higher.name

        else:
            first_freq, second_freq = higher_frequency, BASE_FREQUENCY
            correct_rect_name = pitch_rect_lower.name

        sound_fname = f'{STIM_FBASE}{first_freq}_{second_freq}.wav'

        sound_fpath = os.path.join(STIM_DIR, sound_fname)

        #pitch_sound_2.sound = 'stimuli/smdtpitch_500_501.wav'
        pitch_rect_higher.fillColor = [0,0,0]
        pitch_rect_lower.fillColor = [0,0,0]
      Each Frame:
        if tThisFlip >= PLAY_DURATION-frameTolerance:
            pitch_rect_higher.fillColor = HIGHER_COLOR
            pitch_rect_lower.fillColor = LOWER_COLOR
      End Routine:
        trial_duration = tThisFlipGlobal - trial_start_time
        # store name of clicked rectangle, in order to set color of inter trial
        # rectangles
        clicked_rect_name = mouse_trial.clicked_name[0]

        # check if response was correct or not, converting boolean to integer
        # (1 for correct, 0 for incorrect response) for more compact and
        # familiar data representation
        response_correct = int(correct_rect_name == clicked_rect_name)

        # save the data
        trials.addData('trial_start_time', trial_start_time)
        trials.addData('trial_duration', trial_duration)
        trials.addData('first_freq', first_freq)
        trials.addData('second_freq', second_freq)
        trials.addData('correct_name', correct_rect_name)
        trials.addData('response_correct', response_correct)
        trial_counter += 1
    SoundComponent sound_trial
      saveStartStop = False
      sound [set every repeat] = $sound_fpath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    MouseComponent mouse_trial
      clickable = pitch_rect_higher, pitch_rect_lower
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
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  Routine inter_trial_500ms_grey
    PolygonComponent inter_trial_grey_rect_higher
      fillColor = $(0, 0, 0)
      pos = (0, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent inter_trial_grey_rect_lower
      fillColor = $(0, 0, 0)
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_inter_trial_grey_higher
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Högre
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    TextComponent text_inter_trial_grey_lower
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Lägre
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  Routine inter_trial_500ms_highlight
    PolygonComponent inter_trial_rect_higher
      fillColor = $(0, 0, 0)
      pos = (0, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent inter_trial_rect_lower
      fillColor = $(0, 0, 0)
      pos = (0, -0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_inter_trial
      Code Type = Py
      Before Experiment:
        # define clicked response box color
        CLICKED_COLOR = [1, 0.3, -1]
      Begin Routine:
        inter_trial_rect_higher.fillColor = HIGHER_COLOR
        inter_trial_rect_lower.fillColor = LOWER_COLOR

        if clicked_rect_name == 'pitch_rect_higher':
            inter_trial_rect_higher.fillColor = CLICKED_COLOR
        else:
            inter_trial_rect_lower.fillColor = CLICKED_COLOR
    TextComponent text_inter_trial_higher
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Högre
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    TextComponent text_inter_trial_lower
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Lägre
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  Routine instructions
    TextComponent text_instructions
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9999
      units = deg
      wrapWidth = 30
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      text:
        Du kommer i varje uppgift att höra två olika toner spelas.

        I varje uppgift ska du avgöra om den andra tonen som spelas är lägre eller högre än den första. Du använder vänster musknapp för att ge dina svar.

        Fortsätt tills du ser ett slutmeddelande. Klicka med vänster musknapp på texten nedanför för att påbörja testet.
    TextComponent text_instructions_start
      color = black
      letterHeight = 0.5
      pos = (0, -10)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9999
      text = Klicka här när du läst klart och är redo
      units = deg
      wrapWidth = 30
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    MouseComponent mouse_instructions
      clickable = text_instructions_start
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 9999
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  Routine end_screen
    TextComponent text_end
      color = black
      letterHeight = 1.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = deg
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      text:
        Nu är testet klart.

        Vänligen vänta tills testledaren kommer tillbaka.
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = num_trials
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    Routine trial
    Routine inter_trial_500ms_highlight
    Routine inter_trial_500ms_grey
  LoopTerminator trials
  Routine end_screen
